PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = social delay discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $str(recipient) + " recieve " + " Rupees " + str(reward_today) + " today " + " or " + " Rupees " + str  (future_reward) + " after " + str(delay) + " days "
    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = D:/LAB IN PSYCHOLOGY/solo project/conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'recipient': 'you', 'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'recipient': 'you', 'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'recipient': 'you', 'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'recipient': 'you', 'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'recipient': 'you', 'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'recipient': 'you', 'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'recipient': 'you', 'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'recipient': 'you', 'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'recipient': 'you', 'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'recipient': 'you', 'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'recipient': 'your friend', 'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'recipient': 'your friend', 'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'recipient': 'your friend', 'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'recipient': 'your friend', 'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'recipient': 'your friend', 'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'recipient': 'your friend', 'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'recipient': 'your friend', 'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'recipient': 'your friend', 'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'recipient': 'your friend', 'reward_today': 40, 'future_reward': 55, 'delay': 62}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
    Routine trial
  LoopTerminator trials
